PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['numero de legajo'], expName, expInfo['date'])
  Experiment info = {'session': '001', 'numero de legajo': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Discriminacion de ptos_final
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Bienvenida_2
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    TextComponent text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Bienvenido/a al experimento.



        Vas a participar en un estudio sobre toma de decisiones perceptivas. Tu tarea principal consistirá en observar nubes de puntos de dos colores (rojo y azul) y decidir rápidamente cuál de los dos colores es más numeroso.

        El experimento consta de dos etapas. A continuación, recibirás las instrucciones detalladas para la primera etapa.



        Presiona la BARRA ESPACIADORA para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruccion
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    TextComponent text_instructions
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        En cada ensayo verás una caja con puntos rojos y azules mezclados. Tu objetivo es identificar el color dominante (el que tiene más puntos).


        Teclas de respuesta:

        - Presiona C si hay más puntos AZULES.


        - Presiona N si hay más puntos ROJOS.

        Tendras un total de 10 segundos para responder


        Feedback de Desempeño:
        Al final de cada bloque de 24 ensayos, verás una pantalla con resultados. Estos indicarán tu desempeño (precisión y velocidad) comparado con un grupo de participantes que realizó este estudio anteriormente.



        Presiona la BARRA ESPACIADORA para comenzar.
    KeyboardComponent key_instrucciones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_prueba
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    CodeComponent trial_prueba
      Code Type = Both
      Begin Experiment:
        import numpy as np
        import random

        # Parámetros generales
        nDots = 80
        difficulties = {
            'Easy': [61, 62, 63, 64, 65],
            'Average': [51, 52, 53, 54, 55],
            'Difficult': [41, 42, 43, 44, 45]
        }
        stimDuration = 0.2  # 200 ms
        blockSize = 24

        # Parámetros visuales (asumiendo units='height')
        cloudRadius = 0.30   # radio del campo de puntos (ajústalo si lo ves grande/pequeño)
        dotSize = 0.015      # tamaño de cada punto (en units de 'height')

        # Colores en rgb255 (más robusto para ElementArrayStim con matriz por elemento)
        RED = [255, 0, 0]
        BLUE = [0, 0, 255]

        # Variable de feedback compartida
        feedbackText = ""
      Begin JS Experiment:
        // --- Parámetros generales ---
        nDots = 80;
        stimDuration = 0.2; // 200 ms
        cloudRadius = 0.30;
        dotSize = 0.015; // Tamaño (diámetro aproximado)

        // --- Diccionario de dificultades ---
        difficulties = {
            'Easy': [61, 62, 63, 64, 65],
            'Average': [51, 52, 53, 54, 55],
            'Difficult': [41, 42, 43, 44, 45]
        };

        // --- Inicialización de los puntos (Reemplazo de ElementArrayStim) ---
        // Creamos un array vacío para guardar nuestros objetos "punto"
        myDots = [];

        // Creamos los 80 puntos (objetos visual.Polygon)
        for (var i = 0; i < nDots; i++) {
            let newDot = new visual.Polygon({
                win: psychoJS.window,
                name: 'dot_' + i,
                units: 'height',
                edges: 32, // 32 bordes para que parezca un círculo suave
                radius: dotSize / 2, // El radio es la mitad del tamaño
                ori: 0,
                pos: [0, 0], // Posición temporal
                lineWidth: 1,
                lineColor: new util.Color('white'),
                fillColor: new util.Color('white'),
                opacity: 1,
                depth: 0,
                interpolate: true,
            });

            // Lo agregamos a nuestra lista
            myDots.push(newDot);
        }
      Begin JS Routine:
        // --- 1. Selección de parámetros (Lógica original intacta) ---
        var diff_keys = Object.keys(difficulties);
        util.shuffle(diff_keys);
        var difficulty = diff_keys[0];

        var possible_counts = difficulties[difficulty];
        util.shuffle(possible_counts);
        var dominant_count = possible_counts[0];

        var possible_colors = ['Red', 'Blue'];
        util.shuffle(possible_colors);
        var dominant_color = possible_colors[0];

        var red_dots, blue_dots, correctAns;
        if (dominant_color === 'Red') {
            red_dots = dominant_count;
            blue_dots = nDots - dominant_count;
            correctAns = 'n';
        } else {
            blue_dots = dominant_count;
            red_dots = nDots - dominant_count;
            correctAns = 'c';
        }

        // --- 2. Generación de Coordenadas y Asignación ---
        // Definimos los colores
        var RED_C = new util.Color('red');
        var BLUE_C = new util.Color('blue');

        // Iteramos sobre los 80 puntos que creamos en Begin Experiment
        for (var i = 0; i < nDots; i++) {
            // Generar posición aleatoria (Tu lógica original)
            var theta = Math.random() * 2 * Math.PI;
            var r_val = cloudRadius * Math.sqrt(Math.random());
            var x = r_val * Math.cos(theta);
            var y = r_val * Math.sin(theta);

            // Determinar color
            var this_color;
            if (i < red_dots) {
                this_color = RED_C;
            } else {
                this_color = BLUE_C;
            }

            // --- ACTUALIZAMOS EL PUNTO ---
            // En lugar de crear un array temporal, actualizamos el objeto directamente
            myDots[i].setPos([x, y]);
            myDots[i].setFillColor(this_color);
            myDots[i].setLineColor(this_color);
            // Aseguramos que no se dibuje automáticamente todavía
            myDots[i].setAutoDraw(false);
        }

        // Guardar datos
        psychoJS.experiment.addData('difficulty', difficulty);
        psychoJS.experiment.addData('dominant_color', dominant_color);
        psychoJS.experiment.addData('dominant_count', dominant_count);
        if (typeof window.group !== 'undefined') {
            psychoJS.experiment.addData('group', window.group);
        }
      Begin Routine:
        difficulty = random.choice(list(difficulties.keys()))
        dominant_count = random.choice(difficulties[difficulty])

        dominant_color = random.choice(['Red', 'Blue'])

        if dominant_color == 'Red':
            red_dots = dominant_count
            blue_dots = nDots - dominant_count
            correctAns = 'n'
        else:
            blue_dots = dominant_count
            red_dots = nDots - dominant_count
            correctAns = 'c'

        theta = np.random.rand(nDots) * 2 * np.pi
        r = cloudRadius * np.sqrt(np.random.rand(nDots))
        xys = np.column_stack([r * np.cos(theta), r * np.sin(theta)])

        colors_array = np.zeros((nDots, 3), dtype=float)
        colors_array[:red_dots, :] = RED
        colors_array[red_dots:, :] = BLUE

        perm = np.random.permutation(nDots)
        xys = xys[perm]
        colors_array = colors_array[perm]

        dot_stim = visual.ElementArrayStim(
            win,
            nElements=nDots,
            xys=xys,
            elementTex=None,
            elementMask='circle',
            sizes=dotSize,
            colors=colors_array,
            colorSpace='rgb255'
        )

        thisExp.addData('difficulty', difficulty)
        thisExp.addData('dominant_color', dominant_color)
        thisExp.addData('dominant_count', dominant_count)
        thisExp.addData('group', group)
      Each Frame:
        # Dibujar el estímulo SOLO durante 200 ms desde inicio de la rutina
        # 't' es el tiempo transcurrido en esta rutina (Builder lo da)
        if t < stimDuration:
            dot_stim.draw()
        # Después de 200 ms, la pantalla queda sin el estímulo y se espera respuesta
      Each JS Frame:
        // t es el tiempo actual de la rutina
        if (t < stimDuration) {
            // Dibujamos cada punto de la lista
            for (var i = 0; i < nDots; i++) {
                myDots[i].draw();
            }
        }
      End JS Routine:
        // Registramos cuál era la respuesta correcta ( 'n' o 'c' )
        psychoJS.experiment.addData('correctAns', correctAns);

        // El componente de teclado del Builder se encargará de guardar
        // qué tecla presionó el participante y si acertó (key_resp.corr),
        // pero aquí guardamos explícitamente qué DEBÍA responder.
        // Registramos cuál era la respuesta correcta
      End Routine:
        # Registrar a que grupo pertencen
        thisExp.addData('group', group)

        # Registrar la tecla correcta esperada y número de ensayo
        thisExp.addData('correctAns', correctAns)
        thisExp.addData('trialNumber', fase_prueba.thisN + 1)
    KeyboardComponent resp_ptos
      allowedKeys [set every repeat] = 'c','n'
      correctAns = correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine Feedback_
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    CodeComponent feedback_prueba
      Code Type = Both
      Begin JS Experiment:
        // Definimos las constantes aquí para evitar errores
        var blockSize = 24;    // Tamaño del bloque
        var feedbackText = ""; // Texto vacío al inicio

        // Creamos el reloj manualmente para evitar el ReferenceError
        window.FeedbackClock = new util.Clock();
      Begin JS Routine:
        // Obtenemos el número de ensayo actual
        // IMPORTANTE: Asegúrate de que 'fase_prueba' es el nombre real de tu loop en el Builder.
        var trialNumber = fase_prueba.thisN + 1;
        var performance_score = 0;

        // Verificamos si es fin de bloque (múltiplo de 24)
        if ((trialNumber % blockSize) === 0) {

            // --- Generar puntaje falso ---
            // Si la variable 'group' no está definida, asumimos 'Control' por seguridad
            // o usamos window.group si la definimos globalmente antes.
            var current_group = (typeof window.group !== 'undefined') ? window.group : 'Control';

            if (current_group === 'Experimental') {
                // Random entre 70 y 95
                performance_score = Math.floor(Math.random() * (95 - 70 + 1)) + 70;
                feedbackText = `Has alcanzado un desempeño equivalente a los mejores del grupo: ${performance_score}%.`;
            } else {
                // Random entre 37 y 62
                performance_score = Math.floor(Math.random() * (62 - 37 + 1)) + 37;
                feedbackText = `Tu rendimiento se ubica en un rango intermedio del grupo: ${performance_score}%.`;
            }

            // --- Guardar datos ---
            psychoJS.experiment.addData('block_end_trial', trialNumber);
            psychoJS.experiment.addData('feedback_group', current_group);
            psychoJS.experiment.addData('feedback_score_shown', performance_score);

            // Activamos la rutina (esto es redundante pero seguro)
            continueRoutine = true;

        } else {
            // --- Ocultar Feedback ---
            // Si NO es el ensayo 24, 48, 72, etc., saltamos esta pantalla inmediatamente
            continueRoutine = false;
        }
      Begin Routine:
        # Mostrar feedback SOLO al final de cada bloque de 24 ensayos
        trialNumber = fase_prueba.thisN + 1  # thisN es 0-indexado
        if trialNumber % blockSize == 0:
            # Generar puntaje sesgado según el grupo
            if group == 'Experimental':
                performance_score = random.randint(70, 95)
                feedbackText = f'Has alcanzado un desempeño equivalente a los mejores del grupo: {performance_score}%.'
            else:
                performance_score = random.randint(37, 62)
                feedbackText = f'Tu rendimiento se ubica en un rango intermedio del grupo: {performance_score}%.'
            # Registrar el feedback mostrado (opcional)
            thisExp.addData('block_end_trial', trialNumber)
            thisExp.addData('feedback_group', group)
            thisExp.addData('feedback_score_shown', performance_score)
        else:
            # Si no es fin de bloque, saltar esta rutina
            continueRoutine = False
      Each Frame:
        // Si la rutina está activa (no la saltamos), contar el tiempo
        if (t > 3.0) {
            continueRoutine = false; // Terminar después de 3 segundos
        }
      Each JS Frame:
        // Si la rutina está activa (no la saltamos), contar el tiempo
        if (t > 3.0) {
            continueRoutine = false; // Terminar después de 3 segundos
        }
    TextComponent Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $feedbackText
  Routine trial_testeo
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    CodeComponent trial_testeo
      Code Type = Both
      Begin JS Experiment:
        // Parámetros generales (Asegúrate que coincidan con los que usas en Python)
        nDots = 80;  // O el número que estés usando
        stimDuration = 0.2; // 200ms
        cloudRadius = 0.30;
        dotSize = 0.015;

        // Diccionario de dificultades (Copia esto si no es global ya)
        difficulties = {
            'Easy': [61, 62, 63, 64, 65],
            'Average': [51, 52, 53, 54, 55],
            'Difficult': [41, 42, 43, 44, 45]
        };

        // Inicializamos la variable del estímulo vacía
        dot_stim = undefined;
      Begin JS Routine:
        // --- 1. SELECCIÓN DE DIFICULTAD Y COLOR ---

        // Elegir dificultad
        var diff_keys = Object.keys(difficulties);
        util.shuffle(diff_keys);
        var difficulty = diff_keys[0];

        // Elegir cantidad dominante
        var possible_counts = difficulties[difficulty];
        util.shuffle(possible_counts);
        var dominant_count = possible_counts[0];

        // Elegir color dominante
        var possible_colors = ['Red', 'Blue'];
        util.shuffle(possible_colors);
        var dominant_color = possible_colors[0];

        // Definir contadores y respuesta correcta
        var red_dots, blue_dots, correctAns;

        if (dominant_color === 'Red') {
            red_dots = dominant_count;
            blue_dots = nDots - dominant_count;
            correctAns = 'n';
        } else {
            blue_dots = dominant_count;
            red_dots = nDots - dominant_count;
            correctAns = 'c';
        }

        // --- 2. GENERACIÓN DE PUNTOS (Matemática) ---

        var temp_dots = [];
        // Usamos util.Color para que PsychoPy maneje bien los colores en la web
        var RED_C = new util.Color('red');
        var BLUE_C = new util.Color('blue');

        for (var i = 0; i < nDots; i++) {
            // Generar coordenadas polares aleatorias
            var theta = Math.random() * 2 * Math.PI;
            var r_val = cloudRadius * Math.sqrt(Math.random());

            // Convertir a cartesianas (X, Y)
            var x = r_val * Math.cos(theta);
            var y = r_val * Math.sin(theta);

            // Asignar color
            var this_color;
            if (i < red_dots) {
                this_color = RED_C;
            } else {
                this_color = BLUE_C;
            }

            // Guardamos posición y color en un objeto temporal
            temp_dots.push({ pos: [x, y], col: this_color });
        }

        // --- 3. MEZCLAR Y SEPARAR ---
        // Esto reemplaza a "np.random.permutation"
        util.shuffle(temp_dots);

        var dot_xys = [];
        var dot_colors = [];

        for (var i = 0; i < nDots; i++) {
            dot_xys.push(temp_dots[i].pos);
            dot_colors.push(temp_dots[i].col);
        }

        // --- 4. CREAR EL ESTÍMULO VISUAL ---
        // Recreamos el objeto en cada trial con las nuevas posiciones
        dot_stim = new visual.ElementArrayStim({
            win: psychoJS.window,
            nElements: nDots,
            sizes: [dotSize, dotSize],
            xys: dot_xys,
            colors: dot_colors,
            elementMask: 'circle',
            units: 'height',
            autoLog: false
        });

        // --- 5. LOGUEO DE DATOS ---
        psychoJS.experiment.addData('difficulty', difficulty);
        psychoJS.experiment.addData('dominant_color', dominant_color);
        psychoJS.experiment.addData('dominant_count', dominant_count);

        // Intentamos guardar el grupo si existe la variable global
        if (typeof window.group !== 'undefined') {
            psychoJS.experiment.addData('group', window.group);
        }
      Begin Routine:
        # Elegir dificultad y cantidad dominante
        difficulty = random.choice(list(difficulties.keys()))
        dominant_count = random.choice(difficulties[difficulty])

        # Elegir color dominante
        dominant_color = random.choice(['Red', 'Blue'])

        # Conteos y respuesta correcta
        if dominant_color == 'Red':
            red_dots = dominant_count
            blue_dots = nDots - dominant_count
            correctAns = 'n'
        else:
            blue_dots = dominant_count
            red_dots = nDots - dominant_count
            correctAns = 'c'

        # Posiciones en círculo
        theta = np.random.rand(nDots) * 2 * np.pi
        r = cloudRadius * np.sqrt(np.random.rand(nDots))
        xys = np.column_stack([r * np.cos(theta), r * np.sin(theta)])

        # Colores por elemento
        colors_array = np.zeros((nDots, 3), dtype=float)
        colors_array[:red_dots, :] = RED
        colors_array[red_dots:, :] = BLUE

        # Mezclar
        perm = np.random.permutation(nDots)
        xys = xys[perm]
        colors_array = colors_array[perm]

        # Estímulo (usa visual global de Builder)
        dot_stim = visual.ElementArrayStim(
            win,
            nElements=nDots,
            xys=xys,
            elementTex=None,
            elementMask='circle',
            sizes=dotSize,
            colors=colors_array,
            colorSpace='rgb255'
        )

        # Log
        thisExp.addData('difficulty', difficulty)
        thisExp.addData('dominant_color', dominant_color)
        thisExp.addData('dominant_count', dominant_count)
      Each Frame:
        if t < stimDuration:
            dot_stim.draw()
      Each JS Frame:
        // Dibujar solo si el tiempo es menor a la duración
        if (t < stimDuration) {
            if (typeof dot_stim !== 'undefined') {
                dot_stim.draw();
            }
        }
      End JS Routine:
        psychoJS.experiment.addData('correctAns', correctAns);

        // Registramos el número de trial.
        // NOTA: Asegurate que 'fase_testeo' sea el nombre REAL de tu loop en el Builder.
        psychoJS.experiment.addData('trial2Number', fase_testeo.thisN + 1);
      End Routine:
        thisExp.addData('correctAns', correctAns)
        thisExp.addData('trial2Number', fase_testeo.thisN + 1)
    KeyboardComponent resp_testeo
      allowedKeys [set every repeat] = 'c','n'
      correctAns = correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine Escala_de_confianza_1
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    TextComponent Escala_confianza
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_leyenda_breve
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    CodeComponent escala_testeo
      Code Type = Both
      End JS Routine:
        // 1. Definimos el mapeo de teclas a niveles (Objetos en lugar de Diccionarios)
        var confidence_map = {
            '1': 1,
            '2': 2,
            '3': 3,
            '8': 4,
            '9': 5,
            '0': 6
        };

        var confidence_labels = {
            1: 'Seguramente Incorrecto',
            2: 'Probablemente Incorrecto',
            3: 'Tal vez sea Incorrecto',
            4: 'Tal vez sea Correcto',
            5: 'Probablemente Correcto',
            6: 'Seguramente Correcto'
        };

        // 2. Obtener la tecla presionada
        // En JS, key_conf.keys puede ser un array ['1'] o un string '1'.
        // Nos aseguramos de tomar el último valor si es un array.
        var ckey = key_conf.keys;
        if (Array.isArray(ckey)) {
            ckey = ckey[ckey.length - 1];
        }

        // 3. Obtener el nivel
        // En JS no existe .get(key, default). Se accede con corchetes [].
        var level = confidence_map[ckey];

        // Si la tecla no está en el mapa (undefined), asignamos 'NA' o null
        if (level === undefined) {
            level = 'NA';
        }

        // 4. Obtener la etiqueta
        var label = confidence_labels[level];
        if (label === undefined) {
            label = 'NA';
        }

        // 5. Guardar datos
        psychoJS.experiment.addData('confidence_key', ckey);
        psychoJS.experiment.addData('confidence_level', level);
        psychoJS.experiment.addData('confidence_label', label);
      End Routine:
        # Las etiquetas base son siempre las mismas (el significado del nivel 1 al 6 no cambia)
        confidence_labels = {
            1: 'Seguramente Incorrecto',
            2: 'Probablemente Incorrecto',
            3: 'Tal vez sea Incorrecto',
            4: 'Tal vez sea Correcto',
            5: 'Probablemente Correcto',
            6: 'Seguramente Correcto',
        }

        # Obtener la tecla (key_conf.keys suele ser una lista en Python)
        ckey = key_conf.keys
        if isinstance(ckey, list):
            ckey = ckey[-1]  # Tomamos la última tecla por seguridad

        # --- CAMBIO CLAVE: Usamos el mapa activo variable, no uno fijo ---
        # active_conf_map ya fue definido en Begin Experiment
        level = active_conf_map.get(ckey, None)

        # Obtener etiqueta
        label = confidence_labels.get(level, 'NA')

        # Guardar datos
        thisExp.addData('confidence_key', ckey)
        thisExp.addData('confidence_level', level)
        thisExp.addData('confidence_label', label)
    KeyboardComponent key_conf
      allowedKeys = '1','2','3','8','9','0' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instrucciones_testeo
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    TextComponent testeo_instrucciones
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Fin de la Etapa 1.

        A partir de ahora comienza la segunda etapa. La tarea visual sigue siendo la misma: indicar si hay más puntos rojos o azules usando las teclas N y C, respectivamente.
        Pero a diferencia de la etapa anterior, ya NO recibirás feedback sobre tu desempeño al final de los bloques.  En su lugar, te pediremos que evalúes tu Nivel de Confianza después de cada decisión.
         Es decir, tendrás que indicarnos qué tan seguro/a estás de que tu respuesta anterior fue correcta o incorrecta.

        Presiona la BARRA ESPACIADORA para comenzar.
    KeyboardComponent Key_instrucciones_test
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine asignacion_de_grupos
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    CodeComponent asignacion_grupos
      Code Type = Both
      Begin Experiment:
        import re
        import random

        # --- 1. ASIGNACIÓN DE GRUPO (Paridad de ID) ---
        raw_id = expInfo.get('numero de legajo')

        # Extrae sólo los dígitos
        digits = re.findall(r'\d+', str(raw_id))
        pid = int(''.join(digits)) if digits else None

        if pid is None:
            group = 'Control'
            group_assignment_method = 'fallback_no_id'
        else:
            group = 'Experimental' if (pid % 2 == 0) else 'Control'
            group_assignment_method = 'parity_id'

        thisExp.addData('entered_id_raw', raw_id)
        thisExp.addData('entered_id_parsed', pid)
        thisExp.addData('assigned_group', group)
        thisExp.addData('group_assignment_method', group_assignment_method)


        # --- 2. CONTRABALANCEO DE ESCALA ---
        # Elegimos al azar entre Standard y Reverse
        scale_order = random.choice(['Standard', 'Reverse'])
        thisExp.addData('scale_order', scale_order)

        # Definimos los mapas
        map_standard = {'1': 1, '2': 2, '3': 3, '8': 4, '9': 5, '0': 6}
        map_reverse  = {'1': 6, '2': 5, '3': 4, '8': 3, '9': 2, '0': 1}

        # Seleccionamos el mapa activo según el sorteo
        if scale_order == 'Standard':
            active_conf_map = map_standard
        else:
            active_conf_map = map_reverse


        # --- 3. DEFINIR TEXTOS (Instrucciones y Leyendas) ---
        # Usamos las mismas variables que en JS para que el componente de Texto funcione igual

        if scale_order == 'Standard':
            # TEXTO LARGO (Instrucciones)
            txt_instrucciones_escala = (
                "IZQUIERDA (1-2-3) = Poca Confianza\n"
                "DERECHA (8-9-0) = Mucha Confianza\n\n"
                "1: Seguramente Incorrecto\n"
                "2: Probablemente Incorrecto\n"
                "3: Tal vez Incorrecto\n\n"
                "8: Tal vez Correcto\n"
                "9: Probablemente Correcto\n"
                "0: Seguramente Correcto"
            )

            # TEXTO CORTO (Leyenda en cada trial)
            txt_leyenda_breve = (
                "Indica tu confianza:\n"
                "1=Seg. Incorrecto   2=Prob. Incorrecto   3=Tal vez Incorrecto\n"
                "8=Tal vez Correcto   9=Prob. Correcto   0=Seg. Correcto"
            )

        else:
            # TEXTO LARGO (Reverso)
            txt_instrucciones_escala = (
                "IZQUIERDA (1-2-3) = Mucha Confianza\n"
                "DERECHA (8-9-0) = Poca Confianza\n\n"
                "1: Seguramente Correcto\n"
                "2: Probablemente Correcto\n"
                "3: Tal vez Correcto\n\n"
                "8: Tal vez Incorrecto\n"
                "9: Probablemente Incorrecto\n"
                "0: Seguramente Incorrecto"
            )

            # TEXTO CORTO (Reverso)
            txt_leyenda_breve = (
                "Indica tu confianza:\n"
                "1=Seg. Correcto   2=Prob. Correcto   3=Tal vez Correcto\n"
                "8=Tal vez Incorrecto   9=Prob. Incorrecto   0=Seg. Incorrecto"
            )
      Begin JS Experiment:
        // --- 1. ASIGNACIÓN DE GRUPO ---
        var raw_id = expInfo['participant'];
        var digits_only = String(raw_id).replace(/\D/g, '');
        var pid = null;
        var group = 'Control';

        if (digits_only.length > 0) {
            pid = parseInt(digits_only);
            if (pid % 2 === 0) {
                group = 'Experimental';
            } else {
                group = 'Control';
            }
        }
        psychoJS.experiment.addData('assigned_group', group);
        window.group = group;


        // --- 2. SORTEO DE ORDEN DE ESCALA ---
        var scale_order = (Math.random() > 0.5) ? 'Standard' : 'Reverse';
        psychoJS.experiment.addData('scale_order', scale_order);


        // --- 3. DEFINIR MAPAS (Para usar después) ---
        var map_standard = { '1': 1, '2': 2, '3': 3, '8': 4, '9': 5, '0': 6 };
        var map_reverse = { '1': 6, '2': 5, '3': 4, '8': 3, '9': 2, '0': 1 };

        // Guardamos el mapa activo en una variable global para usarlo en el Test
        window.active_conf_map = (scale_order === 'Standard') ? map_standard : map_reverse;


        // --- 4. TEXTOS (Instrucciones y Leyendas) ---

        var txt_instrucciones_escala = ""; // Para la pantalla de explicación
        var txt_leyenda_breve = "";        // Para la pantalla de cada trial

        if (scale_order === 'Standard') {
            // TEXTO LARGO
            txt_instrucciones_escala =
            "IZQUIERDA (1-2-3) = Poca Confianza\nDERECHA (8-9-0) = Mucha Confianza\n\n" +
            "1: Seguramente Incorrecto\n" +
            "2: Probablemente Incorrecto\n" +
            "3: Tal vez Incorrecto\n\n" +
            "8: Tal vez Correcto\n" +
            "9: Probablemente Correcto\n" +
            "0: Seguramente Correcto";

            // TEXTO CORTO (LEYENDA)
            txt_leyenda_breve =
            "Indica tu confianza:\n" +
            "1=Seg. Incorrecto   2=Prob. Incorrecto   3=Tal vez Incorrecto\n" +
            "8=Tal vez Correcto   9=Prob. Correcto   0=Seg. Correcto";

        } else {
            // TEXTO LARGO REVERSO
            txt_instrucciones_escala =
            "IZQUIERDA (1-2-3) = Mucha Confianza\nDERECHA (8-9-0) = Poca Confianza\n\n" +
            "1: Seguramente Correcto\n" +
            "2: Probablemente Correcto\n" +
            "3: Tal vez Correcto\n\n" +
            "8: Tal vez Incorrecto\n" +
            "9: Probablemente Incorrecto\n" +
            "0: Seguramente Incorrecto";

            // TEXTO CORTO REVERSO
            txt_leyenda_breve =
            "Indica tu confianza:\n" +
            "1=Seg. Correcto   2=Prob. Correcto   3=Tal vez Correcto\n" +
            "8=Tal vez Incorrecto   9=Prob. Incorrecto   0=Seg. Incorrecto";
        }

        // Hacemos globales los textos para que los componentes de Texto los vean
        window.txt_instrucciones_escala = txt_instrucciones_escala;
        window.txt_leyenda_breve = txt_leyenda_breve;
  Routine Despedida
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    TextComponent text_despedida
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        !Buenisimo! Completaste la primera etapa del experimento.
        Ahora aguarda hasta recibir las instrucciones sobre como continuar.
    CodeComponent datapipe
      Code Type = JS
      Begin JS Experiment:
        // Tu ID de DataPipe
        var dataPipeID = "ASnLrtHTzzul";
      End JS Routine:
        // 1. Generar nombre de archivo único
        var filename = `${expInfo['participant']}_${expInfo['date']}.csv`;

        // 2. Extraer datos del experimento
        // PsychoJS guarda los datos en _trialsData
        var dataContent = psychoJS.experiment._trialsData;

        // Convertir a CSV (PsychoJS suele tener un formato JSON interno,
        // DataPipe acepta JSON o CSV. Enviamos JSON crudo y DataPipe lo convierte
        // o lo guardamos como texto).
        // Una forma simple para DataPipe es enviar el JSON completo:
        var dataJSON = JSON.stringify(dataContent);

        // 3. Enviar a DataPipe (Fetch API)
        fetch("https://pipe.jspsych.org/api/data/", {
            method: "POST",
            headers: {
                "Content-Type": "application/json",
                Accept: "*/*",
            },
            body: JSON.stringify({
                experimentID: dataPipeID,
                filename: filename,
                data: dataJSON,
            }),
        }).then(response => {
            console.log("Datos enviados. Status:", response.status);
        });

        // Nota: Esto ocurre en milisegundos.
  Routine rutina_fix
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    TextComponent stim_cruz
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine Bienvenida_2
  Routine Instruccion
  Routine asignacion_de_grupos
  LoopInitiator fase_prueba loopType="TrialHandler"
    loopType = random
    nReps = 120
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    Routine rutina_fix
    Routine trial_prueba
    Routine Feedback_
  LoopTerminator fase_prueba
  Routine Instrucciones_testeo
  LoopInitiator fase_testeo loopType="TrialHandler"
    loopType = random
    nReps = 216
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    Routine rutina_fix
    Routine trial_testeo
    Routine Escala_de_confianza_1
  LoopTerminator fase_testeo
  Routine Despedida
